// "BatchConvertLSMsToPICs"
//
// This macro batch processes all the lsm files in a folder
// saving them as pic files.
// Limitations/Specifics
// 1) Only works with Fiji
// 2) Swaps channel 1 and 2
// 3) Always flips vertically 
// 4) Expects names to be in regular JLab format
//    or in something where all it has to do is append the
//    v01.pic v02.pic etc to the filestem

// (Slightly) Adapted by Greg Jefferis from code at
// http://rsb.info.nih.gov/ij/macros/BatchProcessFolders.txt

// jefferis@gmail.com

requires("1.42k"); 
file = getArgument;
dir=""
outputDir=""
outputformat="nrrd" // or pic

// 1) Check what arguments we've received 
// --------------------------------------
//print("file = "+file);
if (file!=""){
	arg = split(file,",");
	if (arg.length<2 || arg.length>4) {
		exit();
	}
	if (arg.length==3){
		outputformat=arg[2];
		if( ! (outputformat == "pic" || outputformat == "nrrd")){
			exit("Output format must be either pic or nrrd");
		}
	}
	// ... now deal with directories
	if(arg[0]=="" || arg[1]==""){
		exit();
	} else {
		outputDir=arg[1];
		if(!endsWith(outputDir,"/")) outputDir=outputDir+"/";

		if(File.isDirectory(arg[0])) {
// we're dealing with a directory
			dir=arg[0];
			if(!endsWith(dir,"/")) dir=dir+"/";
		} else {
// single file
			dir=File.getParent(arg[0])+"/";
			file=File.getName(arg[0]);
			processFile(dir,outputDir,file);
			exit();
		}
	}
}

// 2) Ask for in/output dirs if required
// --------------------------------------

if(dir=="") dir = getDirectory("Choose a stacks directory");
if(outputDir=="") outputDir = getDirectory("Choose output directory");

// 3) Process files in the chosen directories
// --------------------------------------

setBatchMode(true);
count = 0;
countFiles(dir);
print("Total files: "+count);
n = 0;
processFiles(dir, outputDir);

// 4) Function definitions
// --------------------------------------

function countFiles(dir) {
		list = getFileList(dir);
	for (i=0; i<list.length; i++) {
		if (endsWith(list[i], "/"))
            countFiles(""+dir+list[i]);
	else
		count++;
	}
}

function processFiles(dir,outputDir) {
	list = getFileList(dir);
    for (i=0; i<list.length; i++) {
        if (endsWith(list[i], "/"))
            processFiles(""+dir+list[i], outputDir);
        else {
		showProgress(n++, count);
              processFile(dir,outputDir,list[i]);
        }
    }
}

function processFile(dir,outputDir,file) {
	if (endsWith(file, ".lsm") || endsWith(file,".LSM")) {
		path = dir+file;
		run("Bio-Formats Windowless Importer", "open=["+path+"]");
		if(nImages==1){
			run("Split Channels");
		}
		if(nImages!=3){
			IJ.log("Skipping "+file+" since there appear to be "+nImages+" channels and I was expecting 3.");
		}
		title=getTitle();
		for(i=nImages;i>0;i--){
			processImage();
			if(outputformat=='pic'){
				run("Biorad ...","biorad=["+outputDir+substring(file,0,lastIndexOf(file,"."))+"_0"+i+".pic]");
			} else {
				setKeyDown("alt");
				run("Nrrd ... ", "nrrd=["+outputDir+substring(file,0,lastIndexOf(file,"."))+"_0"+i+".nrrd]");
				setKeyDown("none");
			}
			close();
		} 
	}
}

function processImage() {
// run("Flip Vertically", "stack");
//	run("Z Project...", "projection=[Standard Deviation]");
//	run("8-bit");
//	run("Flip Vertically");
}
